---
API: 2.1
OpenSesame: 3.3.14
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set round_decimals 2
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/olferskjf/surfdrive - Kerwin Olfers@surfdrive.surf.nl/1. SOLO/5. Projects/2024_01_19 Vu-ams Markers/vuams-markers/Example/OpenSesame"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set canvas_backend xpyriment
set background black

define sketchpad Connect
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Press any key to start the connection and the recording" x=0 y=0 z_index=0

define sketchpad Continue
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Check if the lights are blinking correctly to indicate recording has started.<br /><br />Next three markers will be sent<br /><br />(Press any key to continue)" x=0 y=0 z_index=0

define sketchpad Marker_1
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Marker 1" x=0 y=0 z_index=0

define sketchpad Marker_2
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Marker 2" x=0 y=0 z_index=0

define sketchpad Marker_3
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Marker 3" x=0 y=0 z_index=0

define sketchpad Prepare
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Make sure Implementation.py is in the same folder as the experiment <br />OR somewhere in the default python paths<br /><br />(press any key to continue)" x=0 y=0 z_index=0

define sketchpad Stop
	set start_response_interval no
	set reset_variables no
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=32 html=yes show_if=always text="Finally press any key to stop the recording." x=0 y=0 z_index=0

define sketchpad Wait
	set duration 1
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="..connecting please wait.." x=0 y=0 z_index=0

define inline_script connect_and_start
	set description "Executes Python code"
	___run__
	# Because the PySerial and Serial package confusion often leads to issues
	# check if pyserial is actually installed
	import os
	stream = os.popen('pip list')
	pip_list = stream.read()
	if "pyserial" in pip_list:
	  print("PySerial Module Installed")
	else : 
	   raise Exception("PySerial is not installed or not in path")
	   
	import sys
	sys.path[0:0] = [pool.folder()] # Puts the pool path in python path 
	
	# Make sure that you have the implementation.py file in your file pool!
	from implementation import connect, start_recording, stop_recording, compile_packet
	
	vuams = connect() # connect to device
	
	# clean-up function to make sure that the comport connection is closed after crash or experiment end.
	def close_comport(ser = vuams):
	        print(u'Closing the comport!')
	        ser.close()
	        
	register_cleanup_function(close_comport)
	
	start_recording(vuams) # start recording
	__end__
	set _prepare ""

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_notepad always
	run Prepare always
	run Connect always
	run Wait always
	run connect_and_start always
	run Continue always
	run Marker_1 always
	run marker_code_1 always
	run Marker_2 always
	run marker_code_2 always
	run Marker_3 always
	run marker_code_3 always
	run Stop always
	run stop_recording always

define inline_script marker_code_1
	set description "Executes Python code"
	___run__
	import time 
	beep = True
	id = 1
	message = "SOLO FSW"
	
	packet = compile_packet(beep, id, message)
	vuams.write(packet)
	
	time.sleep(1)
	__end__
	set _prepare ""

define inline_script marker_code_2
	set description "Executes Python code"
	___run__
	beep = True
	id = 3
	message = "Leiden University"
	
	packet = compile_packet(beep, id, message)
	vuams.write(packet)
	
	time.sleep(1)
	__end__
	set _prepare ""

define inline_script marker_code_3
	set description "Executes Python code"
	___run__
	beep = True
	id = 1
	message = "2024"
	
	packet = compile_packet(beep, id, message)
	vuams.write(packet)
	
	time.sleep(1)
	__end__
	set _prepare ""

define notepad new_notepad
	__note__
	IMPORTANT: 
	The marker script only works with Python 3.7 and higher, 
	meaning OpenSesame versions needs to be 3.3.x or higher.
	
	There are multiple ways to use the vu-ams marker code in your experiment, e.g.:
	
	1. Install the package from github (see: https://github.com/solo-fsw/vuams-markers/blob/main/README.md) and load the package in an inline.
	
	2. [THE METHOD USED IN THIS EXAMPLE] Download the implementation.py file from https://github.com/solo-fsw/vuams-markers/blob/main/Code/implementation.py (use the download raw file button). Add it into the OpenSesame file pool, and make sure the file pool (which is created in a temporary folder at run-time) is added to the python path. The advantage of this is that you are always using the same version and do not need to install the package on a new machine. Note you still need to have pyserial installed.
	
	3. Manually copy the code into an inline script. 
	
	
	USAGE NOTES:
	
	- To have a marker sent as close as possible to the onset of a sketchpad, put it right after the sketchpad
	with the sketchpad duration set to 0.
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script stop_recording
	set description "Executes Python code"
	___run__
	stop_recording(vuams)
	__end__
	set _prepare ""

